PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'randomization': u'', u'session': u'', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data/pyData_%s_%s%s_%s_%s' %(expInfo['participant'], expInfo['randomization'], expInfo['session'], expName, expInfo['date'])
  expName = emoloc
  Screen = 1
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Routines
  Routine end
    ImageComponent end_image
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/end.png
      size = [1024,768]
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    CodeComponent log_data
      Begin Routine:
        experimentEnd = prescanClock.getTime()
      End Routine:
        dim = selectedResp.shape
        # datafile = u'data/Data_%s_%s%s_RandCon%s_%s_%s.txt' %(expInfo['participant'], expInfo['randomization'], expInfo['session'], runRandomization, expName, expInfo['date'])
        datafile = u'data/sub-%s_task-%s_run-00%s_parm-%s%s_date-%s_events.tsv' %(expInfo['participant'], expName, expInfo['session'], expInfo['randomization'], expInfo['session'], expInfo['date'])
        f = open(datafile,'w')
        f.write(
            'onset' + '\t' + # trial_startTime
            'duration' + '\t' + # trial_startTime
            'block' + '\t' +
            'trial' + '\t' +
            'stimulus' + '\t' +
            'verdicalResp' + '\t' +
            'firstResp' + '\t' +
            'firstResp_RT' + '\t' +
            'subject' + '\t' +
            'randomization' + '\t' +
            'randomizationInput' + '\t' +
            'parametersFile_trials' + '\t' +
            'parametersFile_blocks' + '\n')
        for n in range(0,dim[2]): # blocks
            for m in range(0,dim[0]): # trials
                f.write(
                    str(selectedResp[m,2,n]) + '\t' +
                    str(3.000) + '\t' + # Hardcoded report of presentation time, be careful
                    str(n+1) + '\t' +
                    str(m+1) + '\t' +
                    str(stimShown[n][m]) + '\t' +
                    str(verdicalResp[m,n]) + '\t' +
                    str(selectedResp[m,0,n]) + '\t' +
                    str(selectedResp[m,1,n]) + '\t' +
                    expInfo['participant'] + '\t' +
                    parametersFile_runs[n][m][23:-4] + '\t' +
                    expInfo['randomization'] + '\t' +
                    parametersFile_runs[n][m] + '\t' +
                    parametersFile + '\n')
        f.write(str(experimentEnd) + '\t' + str(2) + '\n')
        f.close()


        blocktype = ['neutral','negative']*int(nBlocks/2)
        datafile = u'data/sub-%s_task-%s_run-00%s_param-%s%s_param-GLM_date-%s_events.tsv' %(expInfo['participant'], expName, expInfo['session'], expInfo['randomization'], expInfo['session'], expInfo['date'])
        f = open(datafile,'w')
        f.write(
            'onset' + '\t' + # trial_startTime
            'duration' + '\t' + # trial_startTime
            'trial_type' + '\n')
        for n in range(0,dim[2]): # blocks
                f.write(
                    str(selectedResp[0, 2, n] - 2) + '\t' +
                    str(2.000) + '\t' +
                    'instructions' + '\n' +
                    str(selectedResp[0,2,n]) + '\t' +
                    str(dim[0]*(3.000+1.000)) + '\t' + # Hardcoded report of presentation time, be careful
                    str(blocktype[n]) + '\n'
                    )
        f.write(str(experimentEnd) + '\t' + str(2) + '\t' + 'instructions' + '\n')
        f.close()

        datafile = u'data/subCOMBINED-%s_task-%s_run-00%s_parm-%s%s_date-%s_events.tsv' %(expInfo['participant'], expName, expInfo['session'], expInfo['randomization'], expInfo['session'], expInfo['date'])
        f = open(datafile,'w')
        f.write(
            'onset' + '\t' + # trial_startTime
            'duration' + '\t' + # trial_startTime
            'trial_type' + '\t' +
            'block' + '\t' +
            'trial' + '\t' +
            'stimulus' + '\t' +
            'verdicalResp' + '\t' +
            'firstResp' + '\t' +
            'firstResp_RT' + '\t' +
            'subject' + '\t' +
            'randomization' + '\t' +
            'randomizationInput' + '\t' +
            'parametersFile_trials' + '\t' +
            'parametersFile_blocks' + '\n')
        for n in range(0,dim[2]): # blocks
            for m in range(0,dim[0]): # trials
        #        if n%2:
        #            trialType = blocktype[1]
        #        else:
        #            trialType = blocktype[0]
                f.write(
                    str(selectedResp[m,2,n]) + '\t' +
                    str(3.000) + '\t' + # Hardcoded report of presentation time, be careful
                    str(blocktype[n] + '_stim') + '\t' +
                    str(n+1) + '\t' +
                    str(m+1) + '\t' +
                    str(stimShown[n][m]) + '\t' +
                    str(verdicalResp[m,n]) + '\t' +
                    str(selectedResp[m,0,n]) + '\t' +
                    str(selectedResp[m,1,n]) + '\t' +
                    expInfo['participant'] + '\t' +
                    parametersFile_runs[n][m][23:-4] + '\t' +
                    expInfo['randomization'] + '\t' +
                    parametersFile_runs[n][m] + '\t' +
                    parametersFile + '\n')
        for n in range(0,dim[2]): # blocks
                f.write(
                    str(selectedResp[0, 2, n] - 2) + '\t' +
                    str(2.000) + '\t' +
                    'instructions' + '\t' +
                    str(n+1) + '\t' +
                    'n/a' + '\t' +
                    'n/a' + '\t' +
                    'n/a' + '\t' +
                    'n/a' + '\t' +
                    'n/a' + '\t' +
                    expInfo['participant'] + '\t' +
                    parametersFile_runs[n][0][23:-4] + '\t' +
                    expInfo['randomization'] + '\t' +
                    parametersFile_runs[n][0] + '\t' +
                    parametersFile + '\n' +
                    str(selectedResp[0,2,n]) + '\t' +
                    str(dim[0]*(3.000+1.000)) + '\t' + # Hardcoded report of presentation time, be careful
                    str(blocktype[n] + '_block') + '\t' +
                    str(n+1) + '\t' +
                    'n/a' + '\t' +
                    'n/a' + '\t' +
                    'n/a' + '\t' +
                    'n/a' + '\t' +
                    'n/a' + '\t' +
                    expInfo['participant'] + '\t' +
                    parametersFile_runs[n][0][23:-4] + '\t' +
                    expInfo['randomization'] + '\t' +
                    parametersFile_runs[n][0] + '\t' +
                    parametersFile + '\n'
                    )
        f.write(str(experimentEnd) + '\t' + str(2) + '\t' + 'instructions' + '\n')
        f.close()
  Routine ITI
    ImageComponent fixation3_image
      stopVal [duration (s)] = 12
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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  Routine scanner_cue
    KeyboardComponent key_resp_scannercue
      durationEstim = 2
      forceEndRoutine = True
      allowedKeys = 'num_add','+','equal'
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent image_fixation
      durationEstim = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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    TextComponent text_scannertrigger
      text = (scanner warming up)
      durationEstim = 2
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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  Routine trial
  Routine ISI
    ImageComponent fixation2_image
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
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  Routine blank
    KeyboardComponent key_resp_2
      durationEstim = 2
      forceEndRoutine = True
      allowedKeys = 'equal'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ready
    KeyboardComponent key_resp_ready
      forceEndRoutine = True
      allowedKeys = '1'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_ready
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/ready.png
      size = [1024,768]
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  Routine initalization
    CodeComponent code
      Begin Experiment:
        if u'%s' %(expInfo['randomization']) == 'demo':
            parametersFile = u'parameters/blocks_demo.csv'
            runRandomization = 'debug'

        if u'%s' %(expInfo['randomization']) == 'a' and u'%s' %(expInfo['session']) == '1':
            parametersFile = u'parameters/blocks_runAa.csv'
            runRandomization = 'A'
        if u'%s' %(expInfo['randomization']) == 'a' and u'%s' %(expInfo['session']) == '2':
            parametersFile = u'parameters/blocks_runBa.csv'
            runRandomization = 'B'

        if u'%s' %(expInfo['randomization']) == 'b' and u'%s' %(expInfo['session']) == '1':
            parametersFile = u'parameters/blocks_runBb.csv'
            runRandomization = 'B'
        if u'%s' %(expInfo['randomization']) == 'b' and u'%s' %(expInfo['session']) == '2':
            parametersFile = u'parameters/blocks_runAb.csv'
            runRandomization = 'A'

        nBlocks = 12
        nTrials = 6
        stimShown = [[None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials]
        parametersFile_runs = [[None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials]
        selectedResp = np.zeros((nTrials,3,nBlocks)) #0= key response, 1= RT 2= Time since start of scan to start of trials
        verdicalResp = np.empty((nTrials,nBlocks))
  Routine prescan
    ImageComponent fixation_prescan
      stopVal [duration (s)] = 8
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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  Routine presentation
    KeyboardComponent key_resp_1back
      stopVal [duration (s)] = 4
      forceEndRoutine = False
      allowedKeys = '1'
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent fixation_image
      stopVal [duration (s)] = 1
      units = pix
      startVal [time (s)] = 3
      image = instructions/fixation.png
      size = [1024,768]
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    ImageComponent targetImage
      opacity = .9
      stopVal [duration (s)] = 3
      units = pix
      startVal [time (s)] = 0
      image [set every repeat] = $target_image
      size = [1024,1024]
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    CodeComponent code_2
      Begin Routine:
        selectedResp[trials.thisIndex, 2, blocks.thisIndex] = prescanClock.getTime()
      End Routine:
        if key_resp_1back.keys is not None:
            selectedResp[trials.thisIndex, 0, blocks.thisIndex] = int(key_resp_1back.keys[0])
            selectedResp[trials.thisIndex, 1, blocks.thisIndex] = key_resp_1back.rt[0]
        stimShown[blocks.thisIndex][trials.thisIndex] = target_image[8:-4]
        parametersFile_runs[blocks.thisIndex][trials.thisIndex] = stim_lists
        verdicalResp[trials.thisIndex,blocks.thisIndex] = verdical_response
  Routine instructions
    ImageComponent instructions_image
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/attend.png
      size = [1024,768]
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Flow
  Routine initalization
  Routine blank
  Routine ready
  Routine scanner_cue
  Routine prescan
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $parametersFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $stim_lists
      loopType = sequential
      nReps = 1
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      Routine presentation
    LoopTerminator trials
    Routine ITI
  LoopTerminator blocks
  Routine end
