PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u'data/pyData_%s_%s%s_%s_%s' %(expInfo['participant'], expInfo['randomization'], expInfo['session'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'randomization': u'', u'session': u'', u'participant': u''}
  expName = ADHDER
  Units = use prefs
  Screen = 1
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Routines
  Routine ISI_A
    ImageComponent fixation_ISIA
      stopVal [time (s)] = $ISIA
      durationEstim = 3
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
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  Routine anticipation
    ImageComponent fixation_anticipation
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
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  Routine end
    ImageComponent image_end
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/end.png
      size = [1024,768]
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  Routine finalFixation
    ImageComponent final_fixation
      stopVal [duration (s)] = 6
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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  Routine logData
    CodeComponent exportData
      Begin Routine:
        #exptInfo = u'participant %s session %s date %s\n\n' %(expInfo['participant'], expInfo['session'], expInfo['date'])
        #f.write(expInfo['participant'])
        datafile = u'data/Data_%s_%s%s_%s_%s.txt' %(expInfo['participant'], expInfo['randomization'], expInfo['session'], expName, expInfo['date'])
        f = open(datafile,'w')
        f.write('trial' + '\t' + 'instructionsShown' + '\t' + 'stim_classDesc' + '\t' + 'stim_groupID' + '\t' + 'stimulus' + '\t' + 'stimulus_startTime' + '\t' + 'finalResp' + '\t' + 'finalResp_RT' + '\t' + 'resp_startTime' + '\t' + 'subject' + '\t' + 'randomization' + '\t' + 'parametersFile' + '\n')
        for n in range(0,len(finalResp)):
            f.write(str(n+1) + '\t' + str(InstructionsShown[n]) + '\t' + str(IAPSstimClassDesc[n]) + '\t' + str(IAPSstimGroup[n]) + '\t' + str(IAPSshown[n]) + '\t' + str(IAPSshownTime[n]) + '\t' + str(finalResp[n]) + '\t' + str(finalRespRT[n]) + '\t' + str(IAPSresponseTime[n]) + '\t' + expInfo['participant'] + '\t' + expInfo['randomization'] + '\t' + parametersFile +'\n')
        f.close() # you can omit in most cases as the destructor will call it
    ImageComponent fixation_final
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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  Routine ready_3
  Routine IAPS
    ImageComponent IAPS_pic
      stopVal [duration (s)] = 8.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $IAPS_image
      size = [1024,1024]
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    CodeComponent code
      End Routine:
        IAPSshown[trials.thisIndex] = int(filter(unicode.isdigit,IAPS_image))
        IAPSstimClassDesc[trials.thisIndex] = stimClassDesc
        IAPSstimClass[trials.thisIndex] = stimClass
    TextComponent debug_text
      color = black
      text [set every repeat] = ﻿stimClassDesc
      stopVal [duration (s)] = 8
      pos = (0, -2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent debug_code
      Begin Experiment:
        if int(expInfo['participant']) == 0:
            debug_text.color=u'white'
            debug_text.pos=(0, -.43)
      Begin Routine:
        debug_text.setText(stimClassDesc)
  Routine initialize
    CodeComponent initalization_code
      Begin Experiment:
        parametersFile = u'parameters/param_%s%s.csv' %(expInfo['randomization'],expInfo['session'])

        nTrials = 24
        finalResp = [None]*nTrials #trials.nReps
        finalRespRT = [None]*nTrials #trials.nReps
        IAPSshown = [None]*nTrials #trials.nReps
        IAPSshownTime = [None]*nTrials #trials.nReps
        IAPSresponseTime = [None]*nTrials #trials.nReps
        InstructionsShown = [None]*nTrials
        IAPSstimClassDesc = [None]*nTrials
        IAPSstimGroup = [None]*nTrials
      Begin Routine:
        win.mouseVisible = False
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine ISI_B
    ImageComponent fixation_ISIB
      stopVal [time (s)] = $ISIB
      durationEstim = 3
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
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  Routine scannerTrigger
    KeyboardComponent scanner_cue_key
      durationEstim = 2
      forceEndRoutine = True
      allowedKeys = 'num_add','+','equal'
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent scannertrigger_fixation
      durationEstim = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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    TextComponent text_scannerTigger
      text = (scanner warming up)
      durationEstim = 2
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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  Routine blank
    KeyboardComponent key_resp_2
      durationEstim = 2
      forceEndRoutine = True
      allowedKeys = 'equal'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ready
    KeyboardComponent key_resp_begin
      durationEstim = 2
      forceEndRoutine = True
      allowedKeys = '1'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_ready
      durationEstim = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/ready.png
      size = [1024,768]
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  Routine prescan
    ImageComponent fixation_prescan
      stopVal [duration (s)] = 6
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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    CodeComponent code_2
  Routine presentation
    CodeComponent code_IAPS
      End Routine:
        #IAPSshown[trials.thisIndex] = int(filter(unicode.isdigit,IAPS_image))
        IAPSshown[trials.thisIndex] = IAPS_image[8:-4]
        IAPSstimClassDesc[trials.thisIndex] = stimClassDesc
        IAPSstimGroup[trials.thisIndex] = stimGroup
    CodeComponent code_instructions
      End Routine:
        InstructionsShown[trials.thisIndex] = instructions_image[13:-4]
    ImageComponent image_fixation_ISI
      stopVal [duration (s)] = 11
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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    ImageComponent image_blank
      stopVal [time (s)] = 10.5
      units = pix
      startVal [time (s)] = 0.5
      image = instructions/blank.png
      size = [1024,768]
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    ImageComponent instructions_pic
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = .5
      image [set during: instructions.ISI_2] = $instructions_image
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    StaticComponent ISI_2
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
    ImageComponent image_IAPS
      stopVal [duration (s)] = 8
      startVal [time (s)] = 2.5
      image [set during: instructions.ISI_2] = $IAPS_image
      size = [1]
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    TextComponent debug_text2
      color = black
      text = stimClassDesc
      stopVal [duration (s)] = 10
      pos = (0, -2)
      startVal [time (s)] = .5
      letterHeight = 0.1
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    StaticComponent ISI_1
      stopVal [duration (s)] = .5
      startVal [time (s)] = 10.5
    CodeComponent code_debug
      Begin Experiment:
        if int(expInfo['participant']) == 0:
            debug_text2.color=u'white'
            debug_text2.pos=(0, -.43)
      Begin Routine:
        debug_text2.setText(stimClassDesc)
  Routine response
    ImageComponent rating_instructions
      stopVal [duration (s)] = 4
      pos = [0, .3]
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/rating.png
      size = [1024,768]
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    RatingScaleComponent rating
      pos = 0, -0.4
      startVal [time (s)] = 0
      size = 2.0
      showAccept = False
      forceEndRoutine = False
      stopVal [time (s)] = 4
      storeHistory = True
      customize_everything = markerColor='Grey', marker='triangle', markerStart=None, size=2.0, pos=[0.0, -0.4], choices=['1', '2', '3', '4', '5'], respKeys=['1','2','3','4','5'], tickHeight=-1, showAccept=False, scale=None
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    CodeComponent reset_keys
      Begin Routine:
        event.clearEvents(eventType='keyboard')
      End Routine:
        if rating.history[-1][0] is None:
            finalResp[trials.thisIndex] = -1
        else:
            finalResp[trials.thisIndex] = int(rating.history[-1][0])
        finalRespRT[trials.thisIndex] = rating.history[-1][1]
        print(trials.thisIndex, IAPSshown[trials.thisIndex], finalResp[trials.thisIndex])
Flow
  Routine initialize
  Routine blank
  Routine ready
  Routine scannerTrigger
  Routine prescan
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $parametersFile
    loopType = sequential
    nReps = 1
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    Routine presentation
    Routine response
  LoopTerminator trials
  Routine logData
  Routine finalFixation
  Routine end
