PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u'data/pyData_%s_%s%s_%s_%s' %(expInfo['participant'], expInfo['randomization'], expInfo['session'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'randomization': u'', u'session': u'', u'participant': u''}
  expName = WMLoc
  Units = use prefs
  Screen = 1
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Routines
  Routine end
    ImageComponent end_image
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/end.png
      size = [1024,768]
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  Routine finalFixation
    ImageComponent final_fixation
      stopVal [duration (s)] = 6
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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  Routine ITI
    ImageComponent fixation_image_ITI
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
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  Routine presenation
    ImageComponent fixation_image
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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    ImageComponent target
      stopVal [duration (s)] = 1.5
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $target_image
      size = [1024,768]
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    KeyboardComponent rating
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = '1'
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_3
      Begin Routine:
        finalResp[trials.thisIndex, 2, blocks.thisIndex] = prescanClock.getTime()
      End Routine:
        targetShown[blocks.thisIndex][trials.thisIndex] = target_image[8]
        verdicalResp[trials.thisIndex, blocks.thisIndex] = verdical_response
        parametersFile_runs[blocks.thisIndex][trials.thisIndex] = stim_lists
        if rating.keys is not None:
            finalResp[trials.thisIndex, 0, blocks.thisIndex] = int(rating.keys[0])
            finalResp[trials.thisIndex, 1, blocks.thisIndex] = rating.rt[0]

        #if verdicalResp[trials.thisIndex, blocks.thisIndex] == finalResp[trials.thisIndex, 0, blocks.thisIndex]:
        #    score = 'Correct'
        #else:
        #    score = 'Incorrect'
        #print(blocks.thisIndex, trials.thisIndex, finalResp[trials.thisIndex, 0, blocks.thisIndex], finalResp[trials.thisIndex, 1, blocks.thisIndex], finalResp[trials.thisIndex, 2, blocks.thisIndex], score)
  Routine countdown
    ImageComponent begin6
      stopVal [duration (s)] = 6
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/begin6.png
      size = [1024,768]
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    ImageComponent begin5
      stopVal [time (s)] = 6
      units = pix
      startVal [time (s)] = 1
      image = instructions/begin5.png
      size = [1024,768]
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    ImageComponent begin4
      stopVal [time (s)] = 6
      units = pix
      startVal [time (s)] = 2
      image = instructions/begin4.png
      size = [1024,768]
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    ImageComponent begin3
      stopVal [time (s)] = 6
      units = pix
      startVal [time (s)] = 3
      image = instructions/begin3.png
      size = [1024,768]
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    ImageComponent begin2
      stopVal [time (s)] = 6
      units = pix
      startVal [time (s)] = 4
      image = instructions/begin2.png
      size = [1024,768]
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    ImageComponent begin1
      stopVal [time (s)] = 6
      units = pix
      startVal [time (s)] = 5
      image = instructions/begin1.png
      size = [1024,768]
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  Routine ready
    ImageComponent image_ready
      durationEstim = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/ready.png
      size = [1024,768]
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    KeyboardComponent key_resp_ready
      durationEstim = 2
      forceEndRoutine = True
      allowedKeys = '1'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine initalize
    CodeComponent code
      Begin Experiment:
        if u'%s' %(expInfo['randomization']) == 'demo':
            parametersFile = u'parameters/blocks_demo.csv'
            runRandomization = 'debug'
            nBlocks = 2 #debug
        else:
            nBlocks = 8 #debug
        nTrials = 18 #debug

        if u'%s' %(expInfo['randomization']) == 'a' and u'%s' %(expInfo['session']) == '1':
            parametersFile = u'parameters/blocks_runAa.csv'
            runRandomization = 'A'
        if u'%s' %(expInfo['randomization']) == 'a' and u'%s' %(expInfo['session']) == '2':
            parametersFile = u'parameters/blocks_runBa.csv'
            runRandomization = 'B'

        if u'%s' %(expInfo['randomization']) == 'b' and u'%s' %(expInfo['session']) == '1':
            parametersFile = u'parameters/blocks_runBb.csv'
            runRandomization = 'B'
        if u'%s' %(expInfo['randomization']) == 'b' and u'%s' %(expInfo['session']) == '2':
            parametersFile = u'parameters/blocks_runAb.csv'
            runRandomization = 'A'

        parametersFile_runs = [[None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials]
        targetShown = [[None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials, [None]*nTrials]
        finalResp = np.zeros((nTrials,3,nBlocks))
        verdicalResp = np.empty((nTrials,nBlocks))
  Routine fixation_pre
    ImageComponent fixation_image_pre
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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  Routine blank
    KeyboardComponent key_resp_2
      durationEstim = 2
      forceEndRoutine = True
      allowedKeys = 'equal'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine scanner_trigger
    KeyboardComponent key_resp_scanner_trigger
      durationEstim = 2
      forceEndRoutine = True
      allowedKeys = 'num_add','+','equal'
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent image_fixation_scanner
      durationEstim = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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    TextComponent text
      text = (scanner warming up)
      durationEstim = 2
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      letterHeight = .06
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  Routine trial_instr
    ImageComponent image_fixation
      stopVal [duration (s)] = 4
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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    ImageComponent trial_instructions_image1
      stopVal [duration (s)] = .55
      units = pix
      startVal [time (s)] = 4
      image [set during: trial_instr.ITI_static] = $instructions_image1
      size = [1024,768]
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    ImageComponent trial_instructions_image2
      stopVal [duration (s)] = .55
      units = pix
      startVal [time (s)] = 4.5
      image [set during: trial_instr.ITI_static] = $instructions_image2
      size = [1024,768]
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    ImageComponent trial_instructions_image3
      stopVal [duration (s)] = .55
      units = pix
      startVal [time (s)] = 5
      image [set during: trial_instr.ITI_static] = $instructions_image3
      size = [1024,768]
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    ImageComponent trial_instructions_image4
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 5.5
      image [set during: trial_instr.ITI_static] = $instructions_image4
      size = [1024,768]
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    ImageComponent trial_instructions_image5
      stopVal [duration (s)] = .3
      units = pix
      startVal [time (s)] = 6
      image [set during: trial_instr.ITI_static] = $instructions_image5
      size = [1024,768]
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    ImageComponent trial_instructions_image6
      stopVal [duration (s)] = 3.4
      units = pix
      startVal [time (s)] = 6.6
      image [set during: trial_instr.ITI_static] = $instructions_image5
      size = [1024,768]
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    StaticComponent ITI_static
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
  Routine logData
    CodeComponent log_data
      End Experiment:
        dim = finalResp.shape
        datafile = u'data/Data_%s_%s%s_RandCon%s_%s_%s.txt' %(expInfo['participant'], expInfo['randomization'], expInfo['session'], runRandomization, expName, expInfo['date'])
        f = open(datafile,'w')
        f.write(
            'block' + '\t' +
            'trial' + '\t' +
            'stimulus' + '\t' +
            'verdicalResp' + '\t' +
            'firstResp' + '\t' +
            'firstResp_RT' + '\t' +
            'trial_startTime' + '\t' +
            'subject' + '\t' +
            'randomization' + '\t' +
            'randomizationInput' + '\t' +
            'parametersFile_trials' + '\t' +
            'parametersFile_blocks' + '\n')
        for n in range(0,dim[2]): #blocks
            for m in range(0,dim[0]): #trials
                f.write(
                    str(n+1) + '\t' +
                    str(m+1) + '\t' +
                    str(targetShown[n][m]) + '\t' +
                    str(verdicalResp[m,n]) + '\t' +
                    str(finalResp[m,0,n]) + '\t' +
                    str(finalResp[m,1,n]) + '\t' +
                    str(finalResp[m,2,n]) + '\t' +
                    expInfo['participant'] + '\t' +
                    parametersFile_runs[n][m][23:-4] + '\t' +
                    expInfo['randomization'] + '\t' +
                    parametersFile_runs[n][m] + '\t' +
                    parametersFile + '\n')
        f.close()
    ImageComponent export_fixation
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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  Routine prescan
    ImageComponent fixation_prescan
      stopVal [duration (s)] = 4
      units = pix
      startVal [time (s)] = 0.0
      image = instructions/fixation.png
      size = [1024,768]
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  Routine presentation
Flow
  Routine initalize
  Routine blank
  Routine ready
  Routine scanner_trigger
  Routine prescan
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $parametersFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine trial_instr
    Routine countdown
    Routine fixation_pre
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $stim_lists
      loopType = sequential
      nReps = 1
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      Routine presenation
    LoopTerminator trials
  LoopTerminator blocks
  Routine logData
  Routine finalFixation
  Routine end
